PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = LDT
  keyboardBackend = PsychToolbox
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Routines
  Routine primeLDT
    TextComponent primeDisplay
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = .05
      text [set every repeat] = $prime
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    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 2
      text [set every repeat] = $stimuli
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    KeyboardComponent keyResponse
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        Press "L" on the keyboard if the words are related.

        Press "A" on the keyboard if the words are unrelated.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = LDTstimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'VENT', 'stimuli': 'AIR'},
      {'prime': 'GOOD', 'stimuli': 'BAD'},
      {'prime': 'KEG', 'stimuli': 'BEER'},
      {'prime': 'COMB', 'stimuli': 'BRUSH'},
      {'prime': 'CHILL', 'stimuli': 'COLD'},
      {'prime': 'MOM', 'stimuli': 'DAD'},
      {'prime': 'SOIL', 'stimuli': 'DIRT'},
      {'prime': 'SKETCH', 'stimuli': 'DRAW'},
      {'prime': 'YOLK', 'stimuli': 'EGG'},
      {'prime': 'BRAWL', 'stimuli': 'FIGHT'},
      {'prime': 'BLAZE', 'stimuli': 'FIRE'},
      {'prime': 'MIST', 'stimuli': 'FOG'},
      {'prime': 'PAL', 'stimuli': 'FRIEND'},
      {'prime': 'COME', 'stimuli': 'GO'},
      {'prime': 'LOW', 'stimuli': 'HIGH'},
      {'prime': 'HOUSE', 'stimuli': 'HOME'},
      {'prime': 'WIN', 'stimuli': 'LOSE'},
      {'prime': 'DAY', 'stimuli': 'NIGHT'},
      {'prime': 'INK', 'stimuli': 'PEN'},
      {'prime': 'TUG', 'stimuli': 'PULL'},
      {'prime': 'KING', 'stimuli': 'QUEEN'},
      {'prime': 'FRIGHT', 'stimuli': 'SCARE'},
      {'prime': 'YELL', 'stimuli': 'SCREAM'},
      {'prime': 'TALL', 'stimuli': 'SHORT'},
      {'prime': 'STAND', 'stimuli': 'SIT'},
      {'prime': 'BROTH', 'stimuli': 'SOUP'},
      {'prime': 'HALT', 'stimuli': 'STOP'},
      {'prime': 'RIP', 'stimuli': 'TEAR'},
      {'prime': 'THICK', 'stimuli': 'THIN'},
      {'prime': 'LOOSE', 'stimuli': 'TIGHT'},
      {'prime': False, 'stimuli': True},
      {'prime': 'EAST', 'stimuli': 'WEST'},
      {'prime': 'CORK', 'stimuli': 'WINE'},
      {'prime': 'SUBTRACT', 'stimuli': 'ADD'},
      {'prime': 'SALOON', 'stimuli': 'BAR'},
      {'prime': 'PEDAL', 'stimuli': 'BIKE'},
      {'prime': 'FRACTURE', 'stimuli': 'BREAK'},
      {'prime': 'CONSTRUCT', 'stimuli': 'BUILD'},
      {'prime': 'ICING', 'stimuli': 'CAKE'},
      {'prime': 'ALTER', 'stimuli': 'CHANGE'}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
    Routine primeLDT
  LoopTerminator trials
