PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = black
  expName = StroopTask
  keyboardBackend = PsychToolbox
  logging level = warning
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Routines
  Routine trial
    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextboxComponent word
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.2
      size = (None, None)
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    SerialOutComponent serialPort
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/tty.Bluetooth-Incoming-Port
      startVal [time (s)] = 0.0
      startdata = 1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine instruct
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        ("Esc" will quit)

        Press any key to continue
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 60
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    conditions:
      [{'text': 'red', 'congruent': 1, 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 0, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 1, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 0, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 1, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 0, 'corrAns': 'left', 'letterColor': 'red'}]
    Routine trial
  LoopTerminator trials
